PsychoPy2experiment version="2023.2.3"
Settings
  Units = height
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  color = $[-1,-1,-1]
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  expName = stroop
  Monitor = testMonitor
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Routines
  Routine instruct
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine trial
    TextComponent word
      text [set every repeat] = $text
      color [set every repeat] = $letterColor
      letterHeight = 0.15
      startVal [time (s)] = 0.5
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    PolygonComponent fixation
      shape = cross
      size = (0.05, 0.05)
      fillColor = white
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
    KeyboardComponent resp
      allowedKeys = 'left','down','right'
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
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    ParallelOutComponent trigger
      startData = 1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.01
  Routine feedback
    CodeComponent fbCode
      Begin Experiment:
        msg = 'doh!'
      Begin Routine:
        if resp.corr:
            msg = "Correct! RT=%.3f" % resp.rt
        else:
            msg = "Oops! That was wrong"
    TextComponent fbText
      text [set every repeat] = $msg
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    MovieComponent clip
      movie = clip.mp4
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.csv
    loopType = random
    nReps = 2
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    Routine trial
    Routine feedback
  LoopTerminator trials
